%YAML 1.1
---
# yaml-language-server: $schema=https://raw.githubusercontent.com/harp-tech/reflex-generator/main/schema/device.json
device: LoadCells
whoAmI: 1232
firmwareVersion: "1.0"
hardwareTargets: "1.0"
registers:
  StartAcquisition:
    address: 32
    access: Write
    type: U8
    maskType: EnableFlag
    description: Enables the data acquisition
  LoadCellData:
    address: 33
    type: S16
    length: 8
    access: Event
    description: Analog value of all Load Cells channels
    payloadSpec:
      Channel0:
        offset: 0
        description: Channel0
      Channel1:
        offset: 1
        description: Channel1
      Channel2:
        offset: 2
        description: Channel2
      Channel3:
        offset: 3
        description: Channel3
      Channel4:
        offset: 4
        description: Channel4
      Channel5:
        offset: 5
        description: Channel5
      Channel6:
        offset: 6
        description: Channel6
      Channel7:
        offset: 7
        description: Channel7
  DigitalInput0:
      address: 34
      access: Event
      type: U8
      maskType: DigitalState
      description: Status of the digital input pin 0. An event will be emitted when DI0Mode == Input.
  DigitalOutput0:
      address: 35
      access: Event
      type: U8
      maskType: DigitalState
      description: Status of the digital output pin 0. An periodic event will be emitted when When DO0Mode == ToggleEachSecond.
  BufferThresholds:
      address: 36
      access: Read
      visibility: private
      type: U8
      description: State of the buffer thresholds.
  Reserved0: &ReservedReg
      address: 37
      access: Read
      visibility: private
      type: U8
      description: Reserved
  Reserved1:
      <<: *ReservedReg
      address: 38
  DigitalInput0Mode:
      address: 39
      access: Write
      type: U8
      maskType: DigitalInput0Config #TODO
      description: Configuration of the digital input pin 0.
  DigitalOutput0Mode:
      address: 40
      access: Write
      type: U8
      maskType: DigitalOutput0Config
      description: Configuration of the digital output pin 0.
  DigitalInput0PulseDuration:
      address: 41
      access: Write
      type: U8
      minValue: 1
      maxValue: 255
      description: Pulse duration (ms) for the digital output pin 0. The pulse will only be emitted when DO0Mode == Pulse.
  OutputSet: &output
    address: 42
    type: U16
    access: Write
    maskType: DigitalOutputs
    description: Set the specified digital output lines.
  OutputClear:
    <<: *output
    address: 43
    description: Clear the specified digital output lines.
  OutputToggle:
    <<: *output
    address: 44
    description: Toggle the specified digital output lines
  OutputState:
    <<: *output
    address: 45
    access: [Write, Event]
    description: Write the state of all digital output lines. An event will be emitted when the value of any pin was changed by a threshold crossing event.
  Reserved2:
      <<: *ReservedReg
      address: 46
  Reserved3:
      <<: *ReservedReg
      address: 47
  OffsetLoadCell0: &offsetloadcell
      address: 48
      access: Write
      type: S16
      minValue: -255
      maxValue: 255
      defaultValue: 0
      description: Offset value for Load Cell channel 0.
  OffsetLoadCell1:
      <<: *offsetloadcell
      address: 49
      description: Offset value for Load Cell channel 1.
  OffsetLoadCell2:
      <<: *offsetloadcell
      address: 50
      description: Offset value for Load Cell channel 2.
  OffsetLoadCell3:
      <<: *offsetloadcell
      address: 51
      description: Offset value for Load Cell channel 3.
  OffsetLoadCell4:
      <<: *offsetloadcell
      address: 52
      description: Offset value for Load Cell channel 4.
  OffsetLoadCell5:
      <<: *offsetloadcell
      address: 53
      description: Offset value for Load Cell channel 5.
  OffsetLoadCell6:
      <<: *offsetloadcell
      address: 54
      description: Offset value for Load Cell channel 6.
  OffsetLoadCell7:
      <<: *offsetloadcell
      address: 55
      description: Offset value for Load Cell channel 7.
  Reserved4:
      <<: *ReservedReg
      address: 56
  Reserved5:
      <<: *ReservedReg
      address: 57
  DO1TargetLoadCell: &targetloadcell
      address: 58
      access: Write
      type: U8
      maskType: ThresholdOnLoadCell
      description: Target Load Cell that will be used to trigger a threshold event on DO1 pin.
  DO2TargetLoadCell:
      <<: *targetloadcell
      address: 59
      description: Target Load Cell that will be used to trigger a threshold event on DO2 pin.
  DO3TargetLoadCell:
      <<: *targetloadcell
      address: 60
      description: Target Load Cell that will be used to trigger a threshold event on DO3 pin.
  DO4TargetLoadCell:
      <<: *targetloadcell
      address: 61
      description: Target Load Cell that will be used to trigger a threshold event on DO4 pin.
  DO5TargetLoadCell:
      <<: *targetloadcell
      address: 62
      description: Target Load Cell that will be used to trigger a threshold event on DO5 pin.
  DO6TargetLoadCell:
      <<: *targetloadcell
      address: 63
      description: Target Load Cell that will be used to trigger a threshold event on DO6 pin.
  DO7TargetLoadCell:
      <<: *targetloadcell
      address: 64
      description: Target Load Cell that will be used to trigger a threshold event on DO7 pin.
  DO8TargetLoadCell:
      <<: *targetloadcell
      address: 65
      description: Target Load Cell that will be used to trigger a threshold event on DO8 pin.
  DO1Threshold: &thresholdvalue
      address: 66
      access: Write
      type: S16
      description: Value used to threshold a Load Cell read, and trigger DO1 pin.
  DO2Threshold:
      <<: *thresholdvalue
      address: 67
      description: Value used to threshold a Load Cell read, and trigger DO2 pin.
  DO3Threshold:
      <<: *thresholdvalue
      address: 68
      description: Value used to threshold a Load Cell read, and trigger DO3 pin.
  DO4Threshold:
      <<: *thresholdvalue
      address: 69
      description: Value used to threshold a Load Cell read, and trigger DO4 pin.
  DO5Threshold:
      <<: *thresholdvalue
      address: 70
      description: Value used to threshold a Load Cell read, and trigger DO5 pin.
  DO6Threshold:
      <<: *thresholdvalue
      address: 71
      description: Value used to threshold a Load Cell read, and trigger DO6 pin.
  DO7Threshold:
      <<: *thresholdvalue
      address: 72
      description: Value used to threshold a Load Cell read, and trigger DO7 pin.
  DO8Threshold:
      <<: *thresholdvalue
      address: 73
      description: Value used to threshold a Load Cell read, and trigger DO8 pin.
  DO1BufferRisingEdge: &bufferedthreshold
      address: 74
      access: Write
      type: U16
      defaultValue: 0
      description: Time (ms) above threshold value that is required to trigger a DO1 pin event.
  DO2BufferRisingEdge:
      <<: *bufferedthreshold
      address: 75
      description: Time (ms) above threshold value that is required to trigger a DO2 pin event.
  DO3BufferRisingEdge:
      <<: *bufferedthreshold
      address: 76
      description: Time (ms) above threshold value that is required to trigger a DO3 pin event.
  DO4BufferRisingEdge:
      <<: *bufferedthreshold
      address: 77
      description: Time (ms) above threshold value that is required to trigger a DO4 pin event.
  DO5BufferRisingEdge:
      <<: *bufferedthreshold
      address: 78
      description: Time (ms) above threshold value that is required to trigger a DO5 pin event.
  DO6BufferRisingEdge:
      <<: *bufferedthreshold
      address: 79
      description: Time (ms) above threshold value that is required to trigger a DO6 pin event.
  DO7BufferRisingEdge:
      <<: *bufferedthreshold
      address: 80
      description: Time (ms) above threshold value that is required to trigger a DO7 pin event.
  DO8BufferRisingEdge:
      <<: *bufferedthreshold
      address: 81
      description: Time (ms) above threshold value that is required to trigger a DO8 pin event.
  DO1BufferFallingEdge:
      <<: *bufferedthreshold
      address: 82
      description: Time (ms) below threshold value that is required to trigger a DO1 pin event.
  DO2BufferFallingEdge:
      <<: *bufferedthreshold
      address: 83
      description: Time (ms) below threshold value that is required to trigger a DO2 pin event.
  DO3BufferFallingEdge:
      <<: *bufferedthreshold
      address: 84
      description: Time (ms) below threshold value that is required to trigger a DO3 pin event.
  DO4BufferFallingEdge:
      <<: *bufferedthreshold
      address: 85
      description: Time (ms) below threshold value that is required to trigger a DO4 pin event.
  DO5BufferFallingEdge:
      <<: *bufferedthreshold
      address: 86
      description: Time (ms) below threshold value that is required to trigger a DO5 pin event.
  DO6BufferFallingEdge:
      <<: *bufferedthreshold
      address: 87
      description: Time (ms) below threshold value that is required to trigger a DO6 pin event.
  DO7BufferFallingEdge:
      <<: *bufferedthreshold
      address: 88
      description: Time (ms) below threshold value that is required to trigger a DO7 pin event.
  DO8BufferFallingEdge:
      <<: *bufferedthreshold
      address: 89
      description: Time (ms) below threshold value that is required to trigger a DO8 pin event.
  EnableEvents:
      address: 90
      access: Write
      type: U8
      maskType: LoadCellEvents
      description: Specifies the active events in the device.
bitMasks:
  DigitalOutputs:
    description: Specifies the state of port digital output lines.
    bits:
      DO1: 0x1
      DO2: 0x2
      DO3: 0x4
      DO4: 0x8
      DO5: 0x10
      DO6: 0x20
      DO7: 0x40
      DO8: 0x80
  LoadCellEvents:
    description: The events that can be enabled/disabled.
    bits:
      LoadCellData: 0x1
      DigitalInput0: 0x2
      DigitalOutput0: 0x4
      Thresholds: 0x8
groupMasks:
  EnableFlag:
    description: The state of an abstract functionality.
    values:
      Disabled: 0
      Enabled: 1
  DigitalState:
    description: The state of a digital pin.
    values:
      Low: 0
      High: 1
  DI0Configuration:
    description: Available configurations for DI0 pin.
    values:
      Input: 0
      StartOnRisingEdge: 1
      StartOnFallingEdge: 2
  DO0Configuration:
    description: Available configurations for DO0 pin.
    values:
      Output: 0
      ToggleEachSecond: 1
      Pulse: 2
  ThresholdOnLoadCell:
    description: Available target load cells to be targeted on threshold events.
    values:
      Channel0: 0
      Channel1: 1
      Channel2: 2
      Channel3: 3
      Channel4: 4
      Channel5: 5
      Channel6: 6
      Channel7: 7
      None: 8